<?xml version='1.0' encoding='UTF-8'?>
<model cmeta:id="tran_model_2009" name="tran_model_2009" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="second"/>
    </units>
    <units name="per_second_squared">
        <unit exponent="-2" units="second"/>
    </units>
    <units name="millimolar">
        <unit prefix="milli" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="millimolar"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="millimolar_squared">
        <unit exponent="2" units="millimolar"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="millimolar"/>
        <unit exponent="-1" units="second"/>
    </units>
    <component name="environment">
        <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
    </component>
    <component name="SERCA">
        <variable initial_value="25900" name="k_p1" units="second_order_rate_constant"/>
        <variable initial_value="2540" name="k_p2" units="first_order_rate_constant"/>
        <variable initial_value="20.5" name="k_p3" units="first_order_rate_constant"/>
        <variable initial_value="16" name="k_m1" units="first_order_rate_constant"/>
        <variable initial_value="67200" name="k_m2" units="second_order_rate_constant"/>
        <variable initial_value="149" name="k_m3" units="second_order_rate_constant"/>
        <variable initial_value="0.9" name="kdcai" units="millimolar"/>
        <variable initial_value="2.24" name="kdcasr" units="millimolar"/>
        <variable initial_value="1.09e-5" name="kdh1" units="millimolar"/>
        <variable initial_value="3.54e-3" name="kdhi" units="millimolar_squared"/>
        <variable initial_value="1.05e-8" name="kdhsr" units="millimolar_squared"/>
        <variable initial_value="7.24e-5" name="kdh" units="millimolar"/>
        <variable initial_value="2" name="n" units="dimensionless"/>
        <variable cmeta:id="SERCA_Ca_i" initial_value="150e-6" name="Ca_i" units="millimolar"/>
        <variable cmeta:id="SERCA_Ca_sr" initial_value="0" name="Ca_sr" units="millimolar"/>
        <variable cmeta:id="SERCA_H_i" initial_value="1e-4" name="H_i" units="millimolar"/>
        <variable cmeta:id="SERCA_ATP" initial_value="5" name="ATP" units="millimolar"/>
        <variable cmeta:id="SERCA_ADP" initial_value="36.3e-3" name="ADP" units="millimolar"/>
        <variable cmeta:id="SERCA_P_i" initial_value="1" name="P_i" units="millimolar"/>
        <variable name="T_Cai" units="dimensionless"/>
        <variable name="T_Casr" units="dimensionless"/>
        <variable name="T_H1" units="dimensionless"/>
        <variable name="T_Hi" units="dimensionless"/>
        <variable name="T_Hsr" units="dimensionless"/>
        <variable name="T_H" units="dimensionless"/>
        <variable cmeta:id="SERCA_a_p1" name="a_p1" units="first_order_rate_constant"/>
        <variable name="a_p2" units="first_order_rate_constant"/>
        <variable name="a_p3" units="first_order_rate_constant"/>
        <variable name="a_m1" units="first_order_rate_constant"/>
        <variable name="a_m2" units="first_order_rate_constant"/>
        <variable name="a_m3" units="first_order_rate_constant"/>
        <variable name="s1" units="per_second_squared"/>
        <variable name="s2" units="per_second_squared"/>
        <variable name="s3" units="per_second_squared"/>
        <variable name="v_cycle" units="first_order_rate_constant"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>T_Cai</ci>
                <apply>
                    <divide/>
                    <ci>Ca_i</ci>
                    <ci>kdcai</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_Casr</ci>
                <apply>
                    <divide/>
                    <ci>Ca_sr</ci>
                    <ci>kdcasr</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_H1</ci>
                <apply>
                    <divide/>
                    <ci>H_i</ci>
                    <ci>kdh1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_Hi</ci>
                <apply>
                    <divide/>
                    <apply>
                        <power/>
                        <ci>H_i</ci>
                        <ci>n</ci>
                    </apply>
                    <ci>kdhi</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_Hsr</ci>
                <apply>
                    <divide/>
                    <apply>
                        <power/>
                        <ci>H_i</ci>
                        <ci>n</ci>
                    </apply>
                    <ci>kdhsr</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>T_H</ci>
                <apply>
                    <divide/>
                    <ci>H_i</ci>
                    <ci>kdh</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_p1</ci>
                <apply>
                    <times/>
                    <ci>k_p1</ci>
                    <ci>ATP</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_p2</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_p2</ci>
                        <apply>
                            <power/>
                            <ci>T_Cai</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <power/>
                            <ci>T_Cai</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>T_Cai</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>T_Hi</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>T_Hi</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>T_H1</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_p3</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_p3</ci>
                        <ci>T_Hsr</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>T_Casr</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>T_H</ci>
                        </apply>
                        <ci>T_H</ci>
                        <apply>
                            <times/>
                            <ci>T_Hsr</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>T_H</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_m1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_m1</ci>
                        <ci>T_Hi</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <power/>
                            <ci>T_Cai</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>T_Cai</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>T_Hi</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>T_Hi</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>T_H1</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_m2</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_m2</ci>
                        <ci>ADP</ci>
                        <apply>
                            <power/>
                            <ci>T_Casr</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <ci>T_H</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <power/>
                                <ci>T_Casr</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>T_H</ci>
                        </apply>
                        <ci>T_H</ci>
                        <apply>
                            <times/>
                            <ci>T_Hsr</ci>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>T_H</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>a_m3</ci>
                <apply>
                    <times/>
                    <ci>k_m3</ci>
                    <ci>P_i</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>s1</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>a_p2</ci>
                        <ci>a_p3</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m1</ci>
                        <ci>a_p3</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m1</ci>
                        <ci>a_m2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>s2</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>a_p1</ci>
                        <ci>a_p3</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m2</ci>
                        <ci>a_p1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m2</ci>
                        <ci>a_m3</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>s3</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>a_p1</ci>
                        <ci>a_p2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m3</ci>
                        <ci>a_m1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a_m3</ci>
                        <ci>a_p2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_cycle</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>a_p1</ci>
                            <ci>a_p2</ci>
                            <ci>a_p3</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>a_m1</ci>
                            <ci>a_m2</ci>
                            <ci>a_m3</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>s1</ci>
                        <ci>s2</ci>
                        <ci>s3</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>Ca_sr</ci>
                </apply>
                <cn cellml:units="flux">1.0</cn>
            </apply>
        </math>
    </component>
    <component name="variables">
        <variable cmeta:id="va_P1-E.H" name="P1" units="millimolar"/>
        <variable cmeta:id="va_P2-ADP.Pi.E.H" name="P2" units="millimolar"/>
        <variable cmeta:id="va_P2a-2H.ADP.Pi.E" name="P2a" units="millimolar"/>
        <variable cmeta:id="va_P4-ADP.Pi.H.2Ca" name="P4" units="millimolar"/>
        <variable cmeta:id="va_P5-ADP.Pi.E.2Ca" name="P5" units="millimolar"/>
        <variable cmeta:id="va_P6-H.Pi.E" name="P6" units="millimolar"/>
        <variable cmeta:id="va_P8-H.Pi.E" name="P8" units="millimolar"/>
        <variable cmeta:id="va_P9-2H.Pi.E" name="P9" units="millimolar"/>
        <variable cmeta:id="va_P10-H.E" name="P10" units="millimolar"/>
        <variable cmeta:id="va_Pi" name="Pi" units="millimolar"/>
        <variable cmeta:id="va_MgATP-Mg.ADP.Pi" name="MgATP" units="millimolar"/>
        <variable cmeta:id="va_2Cai-Ca" name="Cai" units="millimolar"/>
        <variable cmeta:id="va_2Casr-Ca" name="Casr" units="millimolar"/>
        <variable cmeta:id="va_1H" name="H" units="millimolar"/>
        <variable cmeta:id="va_MgADP-Mg.ADP" name="MgADP" units="millimolar"/>
    </component>
    <component name="reaction_rates">
        <variable cmeta:id="ra_12" name="v_12" units="millimolar"/>
        <variable cmeta:id="ra_24" name="v_24" units="millimolar"/>
        <variable cmeta:id="ra_22a" name="v_22a" units="millimolar"/>
        <variable cmeta:id="ra_45" name="v_45" units="millimolar"/>
        <variable cmeta:id="ra_56" name="v_56" units="millimolar"/>
        <variable cmeta:id="ra_68" name="v_68" units="millimolar"/>
        <variable cmeta:id="ra_89" name="v_89" units="millimolar"/>
        <variable cmeta:id="ra_910" name="v_910" units="millimolar"/>
        <variable cmeta:id="ra_101" name="v_101" units="millimolar"/>
    </component>
    <component name="coefficients">
        <variable cmeta:id="co_P1_12" initial_value="-1" name="P1_12" units="dimensionless"/>
        <variable cmeta:id="co_MgATP_12" initial_value="-1" name="MgATP_12" units="dimensionless"/>
        <variable cmeta:id="co_P2_12" initial_value="1" name="P2_12" units="dimensionless"/>
        <variable cmeta:id="co_P2_24" initial_value="-1" name="P2_24" units="dimensionless"/>
        <variable cmeta:id="co_Cai_24" initial_value="-2" name="Cai_24" units="dimensionless"/>
        <variable cmeta:id="co_P4_24" initial_value="1" name="P4_24" units="dimensionless"/>
        <variable cmeta:id="co_P2_22a" initial_value="-1" name="P2_22a" units="dimensionless"/>
        <variable cmeta:id="co_H_22a" initial_value="-1" name="H_22a" units="dimensionless"/>
        <variable cmeta:id="co_P2a_22a" initial_value="1" name="P2a_22a" units="dimensionless"/>
        <variable cmeta:id="co_P4_45" initial_value="-1" name="P4_45" units="dimensionless"/>
        <variable cmeta:id="co_P5_45" initial_value="1" name="P5_45" units="dimensionless"/>
        <variable cmeta:id="co_H_45" initial_value="1" name="H_45" units="dimensionless"/>
        <variable cmeta:id="co_P5_56" initial_value="-1" name="P5_56" units="dimensionless"/>
        <variable cmeta:id="co_MgADP_56" initial_value="1" name="MgADP_56" units="dimensionless"/>
        <variable cmeta:id="co_P6_56" initial_value="1" name="P6_56" units="dimensionless"/>
        <variable cmeta:id="co_P6_68" initial_value="-1" name="P6_68" units="dimensionless"/>
        <variable cmeta:id="co_P8_68" initial_value="1" name="P8_68" units="dimensionless"/>
        <variable cmeta:id="co_Casr_68" initial_value="2" name="Casr_68" units="dimensionless"/>
        <variable cmeta:id="co_P8_89" initial_value="-1" name="P8_89" units="dimensionless"/>
        <variable cmeta:id="co_H_89" initial_value="-2" name="H_89" units="dimensionless"/>
        <variable cmeta:id="co_P9_89" initial_value="1" name="P9_89" units="dimensionless"/>
        <variable cmeta:id="co_P9_910" initial_value="-1" name="P9_910" units="dimensionless"/>
        <variable cmeta:id="co_H_910" initial_value="1" name="H_910" units="dimensionless"/>
        <variable cmeta:id="co_P10_910" initial_value="1" name="P10_910" units="dimensionless"/>
        <variable cmeta:id="co_P10_101" initial_value="-1" name="P10_101" units="dimensionless"/>
        <variable cmeta:id="co_P1_101" initial_value="1" name="P1_101" units="dimensionless"/>
        <variable cmeta:id="co_Pi_101" initial_value="1" name="Pi_101" units="dimensionless"/>
    </component>
    <component name="rate_constants">
        <variable cmeta:id="rc_f_12" initial_value="25900" name="k_f_12" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_12" initial_value="2" name="k_r_12" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_f_24" initial_value="3.1276e10" name="k_f_24" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_24" initial_value="2.59e10" name="k_r_24" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_f_22a" initial_value="2.3761e15" name="k_f_22a" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_22a" initial_value="2.59e10" name="k_r_22a" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_f_45" initial_value="2.59e10" name="k_f_45" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_45" initial_value="7.3164e12" name="k_r_45" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_f_56" initial_value="2540" name="k_f_56" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_56" initial_value="67200" name="k_r_56" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_f_68" initial_value="1.2996e11" name="k_f_68" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_68" initial_value="2.59e10" name="k_r_68" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_f_89" initial_value="3.4667e18" name="k_f_89" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_89" initial_value="2.59e10" name="k_r_89" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_f_910" initial_value="2.59e10" name="k_f_910" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_910" initial_value="3.4773e14" name="k_r_910" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_f_101" initial_value="20.5" name="k_f_101" units="second_order_rate_constant"/>
        <variable cmeta:id="rc_r_101" initial_value="149" name="k_r_101" units="second_order_rate_constant"/>
    </component>
    <connection>
        <map_components component_1="environment" component_2="SERCA"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <documentation xmlns="http://cellml.org/tmp-documentation">
        <article xmlns="http://cellml.org/tmp-documentation">
            <articleinfo xmlns="http://cellml.org/tmp-documentation">
                <title xmlns="http://cellml.org/tmp-documentation">A Thermodynamic Model of the Cardiac Sarcoplasmic/Endoplasmic Ca(2+) (SERCA) Pump</title>
                <author xmlns="http://cellml.org/tmp-documentation">
                    <firstname xmlns="http://cellml.org/tmp-documentation">Catherine</firstname>
                    <surname xmlns="http://cellml.org/tmp-documentation">Lloyd</surname>
                    <affiliation xmlns="http://cellml.org/tmp-documentation">
                        <shortaffil xmlns="http://cellml.org/tmp-documentation">Auckland Bioengineering Institute, The University of Auckland</shortaffil>
                    </affiliation>
                </author>
            </articleinfo>
            <section xmlns="http://cellml.org/tmp-documentation" id="sec_status">
                <title xmlns="http://cellml.org/tmp-documentation">Model Status</title>
                <para xmlns="http://cellml.org/tmp-documentation">
        This CellML model has been unit checked and is known to run in both OpenCell and COR.  This particular version of the CellML model describes the three-state cooperative SERCA model and recreates figure 13.  In order to recreate this figure we have had to add an additional equation to the model to define the rate of change in Casr.  Please also note there are typographical errors in the original paper and [H+] should be raised to the power of n (n=2) for T_Hi and T_Hsr. Also in figure 12 the concentrations of ADP should be 8uM and 20uM rather than 20uM and 40uM.
          </para>
            </section>
            <sect1 xmlns="http://cellml.org/tmp-documentation" id="sec_structure">
                <title xmlns="http://cellml.org/tmp-documentation">Model Structure</title>
                <para xmlns="http://cellml.org/tmp-documentation">
ABSTRACT: We present a biophysically based kinetic model of the cardiac SERCA pump that consolidates a range of experimental data into a consistent and thermodynamically constrained framework. The SERCA model consists of a number of sub-states with partial reactions that are sensitive to Ca(2+) and pH, and to the metabolites MgATP, MgADP, and Pi. Optimization of model parameters to fit experimental data favors a fully cooperative Ca(2+)-binding mechanism and predicts a Ca(2+)/H(+) counter-transport stoichiometry of 2. Moreover, the order of binding of the partial reactions, particularly the binding of MgATP, proves to be a strong determinant of the ability of the model to fit the data. A thermodynamic investigation of the model indicates that the binding of MgATP has a large inhibitory effect on the maximal reverse rate of the pump. The model is suitable for integrating into whole-cell models of cardiac electrophysiology and Ca(2+) dynamics to simulate the effects on the cell of compromised metabolism arising in ischemia and hypoxia.
</para>
                <para xmlns="http://cellml.org/tmp-documentation">
The complete original paper reference is cited below:
</para>
                <para xmlns="http://cellml.org/tmp-documentation">
A Thermodynamic Model of the Cardiac Sarcoplasmic/Endoplasmic Ca(2+) (SERCA) Pump, Kenneth Tran, Nicolas P. Smith, Denis S. Loiselle, and Edmund J. Crampin, 2009, <emphasis xmlns="http://cellml.org/tmp-documentation">Biophysical Journal</emphasis>, 96 (5) 2029-2042. <ulink xmlns="http://cellml.org/tmp-documentation" url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=19254563&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 19254563</ulink>
                </para>
                <informalfigure xmlns="http://cellml.org/tmp-documentation" float="0">
                    <mediaobject xmlns="http://cellml.org/tmp-documentation">
                        <imageobject xmlns="http://cellml.org/tmp-documentation">
                            <imagedata xmlns="http://cellml.org/tmp-documentation" fileref="tran_2009.png"/>
                        </imageobject>
                    </mediaobject>
                    <caption xmlns="http://cellml.org/tmp-documentation"> Schematic of the simplified three-state model. Application of the rapid equilibrium assumption to the ion-binding partial reactions (states within the two dotted boxes in Fig. 1) results in a simplified three-state model. The apparent rate constants (alphai + or -, i = 1, 2, 3) replace the forward and backward rate constants and are a function of ion concentrations and dissociation constants. 
</caption>
                </informalfigure>
            </sect1>
        </article>
    </documentation>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Seq xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#277d3fce-1e82-45ea-884f-2e76a89f4a54">
            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="rdf:#5a8af88e-79ba-4e3a-a593-38f0298d25aa"/>
            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="rdf:#3e2e26bb-0f27-47bd-bd91-6953b7b7b874"/>
            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="rdf:#7eff5bdd-8d4f-40df-8629-2acc3d9f4733"/>
            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="rdf:#a2f05790-5ec5-42ca-a8d9-6db94a7a06eb"/>
        </rdf:Seq>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A Thermodynamic Model of the Cardiac Sarcoplasmic/Endoplasmic Ca(2+) (SERCA) Pump: the three-state SERCA model</dc:title>
            <dc:publisher xmlns:dc="http://purl.org/dc/elements/1.1/"/>
            <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#59ac1836-2f1d-4123-9e4d-279bd99d90be" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#f4cfda0d-7868-4c07-b67f-c405e97eee3e" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#56464cca-dd1f-4ca3-adbb-ebdb90f265be" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#b06c7bb6-6563-4d49-b6d0-be2036ec2c30">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Edmund</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Crampin</vCard:Family>
            <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">J</vCard:Other>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#594c54e4-2368-4aba-8dee-bd2175490d26">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#6b548755-48ec-4433-8329-94c1c0c1c7c3" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#tran_model_2009">
            <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#dde09b5f-2570-44e4-b7af-2782b3f4dc03" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <bqs:subject_type xmlns:bqs="http://www.cellml.org/bqs/1.0#">keyword</bqs:subject_type>
                    <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                        <rdf:Bag xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">electrophysiology</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">cardiac</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">SERCA</rdf:li>
                            <rdf:li xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">calcium dynamics</rdf:li>
                        </rdf:Bag>
                    </rdf:value>
                </dc:subject>
            </bqs:reference>
            <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#594c54e4-2368-4aba-8dee-bd2175490d26" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#1aa7136e-0363-4f6f-8e67-d823ba86d1ab">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#277d3fce-1e82-45ea-884f-2e76a89f4a54" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A Thermodynamic Model of the Cardiac Sarcoplasmic/Endoplasmic Ca(2+) (SERCA) Pump</dc:title>
            <bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">96</bqs:volume>
            <bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">2029</bqs:first_page>
            <bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#dbd53168-2407-4b79-a3da-77beb4f217ab" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#80797212-992e-4436-9c29-95f80d6ea1d5" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">2042</bqs:last_page>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#56464cca-dd1f-4ca3-adbb-ebdb90f265be">
            <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#05a40c92-02a0-4779-941b-2267d63e9f20" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#b59fbe3f-3a81-46d3-a98c-90bb39108878" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#a3800ea1-7856-4edb-9cf1-0579364ed799" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#a2f05790-5ec5-42ca-a8d9-6db94a7a06eb">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#b06c7bb6-6563-4d49-b6d0-be2036ec2c30" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#6c88af07-dec5-4659-aa5c-908846a4c4ad">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Denis</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Loiselle</vCard:Family>
            <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">S</vCard:Other>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#3e2e26bb-0f27-47bd-bd91-6953b7b7b874">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#01fe663c-eefc-4a1e-8d24-f6891a804dc2" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#05a40c92-02a0-4779-941b-2267d63e9f20">
            <vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
            <vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Auckland Bioengineering Institute</vCard:Orgunit>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#f4cfda0d-7868-4c07-b67f-c405e97eee3e">
            <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2009-03-05T00:00:00+00:00</dcterms:W3CDTF>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#f89919f3-1b06-4a91-b591-952b37d6146d">
            <vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine Lloyd</vCard:FN>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#b59fbe3f-3a81-46d3-a98c-90bb39108878">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://imc.org/vCard/3.0#internet"/>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">k.tran@auckland.ac.nz</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#a3800ea1-7856-4edb-9cf1-0579364ed799">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Kenneth</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Tran</vCard:Family>
            <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#62cab138-9811-478d-9183-2d5af616ef1e">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Kenneth</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Tran</vCard:Family>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#01fe663c-eefc-4a1e-8d24-f6891a804dc2">
            <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Nicolas</vCard:Given>
            <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Smith</vCard:Family>
            <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">P</vCard:Other>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#7eff5bdd-8d4f-40df-8629-2acc3d9f4733">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#6c88af07-dec5-4659-aa5c-908846a4c4ad" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#5a8af88e-79ba-4e3a-a593-38f0298d25aa">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#62cab138-9811-478d-9183-2d5af616ef1e" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#6b548755-48ec-4433-8329-94c1c0c1c7c3">
            <vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#59ac1836-2f1d-4123-9e4d-279bd99d90be">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#f89919f3-1b06-4a91-b591-952b37d6146d" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">This CellML model has been unit checked and is known to run in both PCEnv and COR.  This particular version of the CellML model describes the three-state cooperative SERCA model and recreates figure 13.  In order to recreate this figure we have had to add an additional equation to the model to define the rate of change in Casr.</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#dde09b5f-2570-44e4-b7af-2782b3f4dc03">
            <bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">19254563</bqs:Pubmed_id>
            <bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#1aa7136e-0363-4f6f-8e67-d823ba86d1ab" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#80797212-992e-4436-9c29-95f80d6ea1d5">
            <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2009-03-00 00:00</dcterms:W3CDTF>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#dbd53168-2407-4b79-a3da-77beb4f217ab">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Biophysical Journal</dc:title>
        </rdf:Description>
    </rdf:RDF>
</model>
